<?xml version='1.0' encoding='UTF-8'?>
<model name="modules" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <units name="J_per_m3">
        <unit units="joule"/>
        <unit exponent="-3" units="metre"/>
    </units>
    <units name="m3_per_s">
        <unit exponent="3" units="metre"/>
        <unit exponent="-1" units="second"/>
    </units>
    <units name="m3">
        <unit exponent="3" units="metre"/>
    </units>
    <units name="Js2_per_m5">
        <unit units="joule"/>
        <unit exponent="2" units="second"/>
        <unit exponent="-5" units="metre"/>
    </units>
    <units name="Js_per_m3">
        <unit units="joule"/>
        <unit units="second"/>
        <unit exponent="-3" units="metre"/>
    </units>
    <units name="per_m">
        <unit exponent="-1" units="metre"/>
    </units>
    <units name="m6_per_J">
        <unit exponent="6" units="metre"/>
        <unit exponent="-1" units="joule"/>
    </units>
    <units name="Js_per_m6">
        <unit units="joule"/>
        <unit units="second"/>
        <unit exponent="-6" units="metre"/>
    </units>
    <units name="Js2_per_m6">
        <unit units="joule"/>
        <unit exponent="2" units="second"/>
        <unit exponent="-6" units="metre"/>
    </units>
    <units name="m_per_s2">
        <unit units="metre"/>
        <unit exponent="-2" units="second"/>
    </units>
    <component name="complete_capillary">
        <!-- SHARED ////////////////////////////////////////////////////-->
        <variable name="t" units="second"/>
        <variable initial_value="0.0" name="beta_g" units="dimensionless"/>
        <variable initial_value="1050" name="rho" units="Js2_per_m5"/>
        <variable initial_value="0.004" name="mu" units="Js_per_m3"/>
        <variable initial_value="9.81" name="g" units="m_per_s2"/>
        <variable initial_value="0.2802" name="a_vessel" units="dimensionless"/>
        <variable initial_value="-505.3" name="b_vessel" units="per_m"/>
        <variable initial_value="0.1324" name="c_vessel" units="dimensionless"/>
        <variable initial_value="-11.14" name="d_vessel" units="per_m"/>
        <!-- VV SPLIT TYPE /////////////////////////////////////////////-->
        <!-- Constitutive parameters-->
        <variable initial_value="0.0" name="theta_input_vessel" units="dimensionless"/>
        <variable initial_value="400000.0" name="E_input_vessel" units="J_per_m3"/>
        <variable initial_value="2e-05" name="l_input_vessel" units="metre"/>
        <variable name="h_input_vessel" units="metre"/>
        <variable initial_value="4e-06" name="r_input_vessel" units="metre"/>
        <variable name="I_input_vessel" units="Js2_per_m6"/>
        <variable name="C_input_vessel" units="m6_per_J"/>
        <variable name="R_input_vessel" units="Js_per_m6"/>
        <variable name="R_v_input_vessel" units="Js_per_m6"/>
        <!-- State Variables-->
        <variable initial_value="0.0" name="u_ext_input_vessel" units="J_per_m3"/>
        <variable name="u_input_vessel" units="J_per_m3"/>
        <variable initial_value="0.0" name="v_input_vessel" public_interface="out" units="m3_per_s"/>
        <variable name="u_d_input_vessel" units="J_per_m3"/>
        <variable initial_value="1e-07" name="v_in_input_vessel" units="m3_per_s"/>
        <variable name="u_C_input_vessel" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_C_input_vessel" public_interface="out" units="m3"/>
        <variable name="u_C_d_input_vessel" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_C_d_input_vessel" public_interface="out" units="m3"/>
        <variable name="v_out_1_input_vessel" units="m3_per_s"/>
        <variable name="v_out_2_input_vessel" units="m3_per_s"/>
        <!-- Constitutive Relations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>h_input_vessel</ci>
                <apply>
                    <times/>
                    <ci>r_input_vessel</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>a_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>b_vessel</ci>
                                    <ci>r_input_vessel</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>c_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>d_vessel</ci>
                                    <ci>r_input_vessel</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>rho</ci>
                        <ci>l_input_vessel</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_input_vessel</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>C_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_input_vessel</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                        <ci>l_input_vessel</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>E_input_vessel</ci>
                        <ci>h_input_vessel</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">8</cn>
                        <ci>mu</ci>
                        <ci>l_input_vessel</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_input_vessel</ci>
                            <cn cellml:units="dimensionless">4</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_v_input_vessel</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="second">0.01</cn>
                    <ci>C_input_vessel</ci>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_input_vessel</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <ci>u_input_vessel</ci>
                                <ci>u_d_input_vessel</ci>
                            </apply>
                            <apply>
                                <times/>
                                <ci>R_input_vessel</ci>
                                <ci>v_input_vessel</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>beta_g</ci>
                            <ci>rho</ci>
                            <ci>g</ci>
                            <ci>l_input_vessel</ci>
                            <apply>
                                <cos/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <times/>
                                        <ci>theta_input_vessel</ci>
                                        <pi/>
                                    </apply>
                                    <cn cellml:units="dimensionless">180</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <ci>I_input_vessel</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_input_vessel</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_in_input_vessel</ci>
                    <ci>v_input_vessel</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_C_input_vessel</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_input_vessel</ci>
                        <apply>
                            <divide/>
                            <ci>C_input_vessel</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <ci>u_ext_input_vessel</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_d_input_vessel</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_input_vessel</ci>
                        <ci>v_out_1_input_vessel</ci>
                    </apply>
                    <ci>v_out_2_input_vessel</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_C_d_input_vessel</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_d_input_vessel</ci>
                        <apply>
                            <divide/>
                            <ci>C_input_vessel</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <ci>u_ext_input_vessel</ci>
                </apply>
            </apply>
            <!-- Original DAE Equations
 u_input_vessel             = u_C_input_vessel+2{dimensionless}*R_v_input_vessel*(v_in_input_vessel-v_input_vessel);
 u_d_input_vessel           = u_C_d_input_vessel+2{dimensionless}*R_v_input_vessel*(v_input_vessel-v_out_1_input_vessel-v_out_2_input_vessel);-->
            <!-- DAE -> ODE Transformation (for one equation)
 u_d_input_vessel           = u_C_d_input_vessel+2{dimensionless}*R_v_input_vessel*(v_input_vessel-v_out_1_input_vessel-v_out_2_input_vessel);-->
            <!-- DAE
 u_d_input_vessel           = u_C_d_input_vessel+2{dimensionless}*R_v_input_vessel*(v_input_vessel-(u_d_input_vessel-u_pericyte_0)/R_pericyte_0-(u_d_input_vessel-u_pericyte_1)/R_pericyte_1);-->
            <!-- ODE-->
            <apply>
                <eq/>
                <ci>u_input_vessel</ci>
                <ci>u_C_input_vessel</ci>
            </apply>
            <apply>
                <eq/>
                <ci>u_d_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <ci>u_C_d_input_vessel</ci>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">2</cn>
                            <ci>R_v_input_vessel</ci>
                            <apply>
                                <plus/>
                                <ci>v_input_vessel</ci>
                                <apply>
                                    <divide/>
                                    <ci>u_pericyte_0</ci>
                                    <ci>R_pericyte_0</ci>
                                </apply>
                                <apply>
                                    <divide/>
                                    <ci>u_pericyte_1</ci>
                                    <ci>R_pericyte_1</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">2</cn>
                            <ci>R_v_input_vessel</ci>
                            <apply>
                                <plus/>
                                <apply>
                                    <divide/>
                                    <cn cellml:units="dimensionless">1</cn>
                                    <ci>R_pericyte_0</ci>
                                </apply>
                                <apply>
                                    <divide/>
                                    <cn cellml:units="dimensionless">1</cn>
                                    <ci>R_pericyte_1</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- PV CONSTRICTION TYPE (PERICYTE) //////////////////////////////////-->
        <!-- Percicyte 0-->
        <variable initial_value="1.0" name="C_pericyte_0" units="m6_per_J"/>
        <variable initial_value="1.0" name="R_pericyte_0" units="Js_per_m6"/>
        <variable initial_value="0.0" name="u_ext_pericyte_0" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_C_pericyte_0" units="m3"/>
        <!-- u_in_pericyte_0 is u_d_input_vessel
 v_pericyte_0 is v_out_1_input_vessel-->
        <variable initial_value="0.0" name="v_out_pericyte_0" units="m3_per_s"/>
        <variable name="u_pericyte_0" units="J_per_m3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_out_1_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>u_d_input_vessel</ci>
                        <ci>u_pericyte_0</ci>
                    </apply>
                    <ci>R_pericyte_0</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_pericyte_0</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_out_1_input_vessel</ci>
                    <ci>v_out_pericyte_0</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_pericyte_0</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_pericyte_0</ci>
                        <ci>C_pericyte_0</ci>
                    </apply>
                    <ci>u_ext_pericyte_0</ci>
                </apply>
            </apply>
        </math>
        <!-- Percicyte 1-->
        <variable initial_value="0.0" name="u_ext_pericyte_1" units="J_per_m3"/>
        <variable initial_value="1.0" name="C_pericyte_1" units="m6_per_J"/>
        <variable initial_value="1.0" name="R_pericyte_1" units="Js_per_m6"/>
        <variable initial_value="0.0" name="q_C_pericyte_1" units="m3"/>
        <!-- u_in_pericyte_1 is u_d_input_vessel
 v_pericyte_1 is v_out_2_input_vessel-->
        <variable initial_value="0.0" name="v_out_pericyte_1" units="m3_per_s"/>
        <variable name="u_pericyte_1" units="J_per_m3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_out_2_input_vessel</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>u_d_input_vessel</ci>
                        <ci>u_pericyte_1</ci>
                    </apply>
                    <ci>R_pericyte_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_pericyte_1</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_out_2_input_vessel</ci>
                    <ci>v_out_pericyte_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_pericyte_1</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_pericyte_1</ci>
                        <ci>C_pericyte_1</ci>
                    </apply>
                    <ci>u_ext_pericyte_1</ci>
                </apply>
            </apply>
        </math>
        <!-- PV SPLIT CAPILLARY ////////////////////////////////////////-->
        <variable initial_value="1e-18" name="q_C_init_capillary_0" units="m3"/>
        <variable initial_value="q_C_init_capillary_0" name="q_C_capillary_0" units="m3"/>
        <variable initial_value="400000.0" name="E_capillary_0" units="J_per_m3"/>
        <variable initial_value="2e-05" name="l_capillary_0" units="metre"/>
        <variable initial_value="2e-06" name="r_capillary_0" units="metre"/>
        <variable initial_value="0.0" name="u_ext_capillary_0" units="J_per_m3"/>
        <variable initial_value="0.25e-7" name="v_out_1_capillary_0" units="m3_per_s"/>
        <variable initial_value="0.25e-7" name="v_out_2_capillary_0" units="m3_per_s"/>
        <variable name="v_out_total_capillary_0" units="m3_per_s"/>
        <variable name="h_capillary_0" units="metre"/>
        <variable name="C_capillary_0" units="m6_per_J"/>
        <variable name="R_capillary_0" units="Js_per_m6"/>
        <variable name="I_capillary_0" units="Js2_per_m6"/>
        <!-- u_in_capillary_0 is u_pericyte_0
 v_capillary_0 is v_out_pericyte_0-->
        <variable name="u_capillary_0" units="J_per_m3"/>
        <!-- Constitutive Relations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>h_capillary_0</ci>
                <apply>
                    <times/>
                    <ci>r_capillary_0</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>a_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>b_vessel</ci>
                                    <ci>r_capillary_0</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>c_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>d_vessel</ci>
                                    <ci>r_capillary_0</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_capillary_0</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>rho</ci>
                        <ci>l_capillary_0</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_0</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>C_capillary_0</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_0</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                        <ci>l_capillary_0</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>E_capillary_0</ci>
                        <ci>h_capillary_0</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_capillary_0</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">8</cn>
                        <ci>mu</ci>
                        <ci>l_capillary_0</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_0</ci>
                            <cn cellml:units="dimensionless">4</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_out_pericyte_0</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_pericyte_0</ci>
                            <ci>u_capillary_0</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>R_capillary_0</ci>
                            <ci>v_out_pericyte_0</ci>
                        </apply>
                    </apply>
                    <ci>I_capillary_0</ci>
                </apply>
            </apply>
            <!-- the below allows non constant compliance-->
            <apply>
                <eq/>
                <ci>v_out_total_capillary_0</ci>
                <apply>
                    <plus/>
                    <ci>v_out_1_capillary_0</ci>
                    <ci>v_out_2_capillary_0</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_capillary_0</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_out_pericyte_0</ci>
                    <ci>v_out_total_capillary_0</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_capillary_0</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_capillary_0</ci>
                        <ci>C_capillary_0</ci>
                    </apply>
                    <ci>u_ext_capillary_0</ci>
                </apply>
            </apply>
        </math>
        <variable initial_value="1e-18" name="q_C_init_capillary_1" units="m3"/>
        <variable initial_value="q_C_init_capillary_1" name="q_C_capillary_1" units="m3"/>
        <variable initial_value="400000.0" name="E_capillary_1" units="J_per_m3"/>
        <variable initial_value="2e-05" name="l_capillary_1" units="metre"/>
        <variable initial_value="2e-06" name="r_capillary_1" units="metre"/>
        <variable initial_value="0.0" name="u_ext_capillary_1" units="J_per_m3"/>
        <variable initial_value="0.25e-7" name="v_out_1_capillary_1" units="m3_per_s"/>
        <variable initial_value="0.25e-7" name="v_out_2_capillary_1" units="m3_per_s"/>
        <variable name="v_out_total_capillary_1" units="m3_per_s"/>
        <variable name="h_capillary_1" units="metre"/>
        <variable name="C_capillary_1" units="m6_per_J"/>
        <variable name="R_capillary_1" units="Js_per_m6"/>
        <variable name="I_capillary_1" units="Js2_per_m6"/>
        <!-- u_in_capillary_1 is u_pericyte_1
 v_capillary_1 is v_out_pericyte_1-->
        <variable name="u_capillary_1" units="J_per_m3"/>
        <!-- Constitutive Relations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>h_capillary_1</ci>
                <apply>
                    <times/>
                    <ci>r_capillary_1</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci>a_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>b_vessel</ci>
                                    <ci>r_capillary_1</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>c_vessel</ci>
                            <apply>
                                <exp/>
                                <apply>
                                    <times/>
                                    <ci>d_vessel</ci>
                                    <ci>r_capillary_1</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_capillary_1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>rho</ci>
                        <ci>l_capillary_0</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_0</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>C_capillary_1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_1</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                        <ci>l_capillary_1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>E_capillary_1</ci>
                        <ci>h_capillary_1</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_capillary_1</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">8</cn>
                        <ci>mu</ci>
                        <ci>l_capillary_1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_capillary_1</ci>
                            <cn cellml:units="dimensionless">4</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_out_pericyte_1</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_pericyte_1</ci>
                            <ci>u_capillary_1</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>R_capillary_1</ci>
                            <ci>v_out_pericyte_1</ci>
                        </apply>
                    </apply>
                    <ci>I_capillary_1</ci>
                </apply>
            </apply>
            <!-- the below allows non constant compliance-->
            <apply>
                <eq/>
                <ci>v_out_total_capillary_1</ci>
                <apply>
                    <plus/>
                    <ci>v_out_1_capillary_1</ci>
                    <ci>v_out_2_capillary_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C_capillary_1</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_out_pericyte_1</ci>
                    <ci>v_out_total_capillary_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_capillary_1</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C_capillary_1</ci>
                        <ci>C_capillary_1</ci>
                    </apply>
                    <ci>u_ext_capillary_1</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
